<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:vid="clr-namespace:Bonsai.Video;assembly=Bonsai.Video"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.SoundCard;assembly=Harp.SoundCard"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="vid:VideoCaptureDevice">
          <vid:Index>0</vid:Index>
          <vid:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>552</cv:X>
            <cv:Y>202</cv:Y>
            <cv:Width>834</cv:Width>
            <cv:Height>688</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>87</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea>400</cv:MinArea>
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Pow">
          <dsp:Power>2</dsp:Power>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Centroid" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Pow">
          <dsp:Power>2</dsp:Power>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Add" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:Sqrt" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Distance</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Harp Sound</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
                <rx:Name>Sound Commands</rx:Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="p1:Device">
                  <harp:OperationMode>Active</harp:OperationMode>
                  <harp:OperationLed>On</harp:OperationLed>
                  <harp:DumpRegisters>true</harp:DumpRegisters>
                  <harp:VisualIndicators>On</harp:VisualIndicators>
                  <harp:Heartbeat>Disabled</harp:Heartbeat>
                  <harp:IgnoreErrors>false</harp:IgnoreErrors>
                  <harp:PortName>COM9</harp:PortName>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:BehaviorSubject">
                <Name>Sound Messages</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Timer">
                  <rx:DueTime>PT0S</rx:DueTime>
                  <rx:Period>PT1S</rx:Period>
                </Combinator>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Distance</Name>
              </Expression>
              <Expression xsi:type="rx:Condition">
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="scr:ExpressionTransform">
                      <scr:Expression>!Double.IsNaN(it)</scr:Expression>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="dsp:Rescale">
                  <dsp:Min>0</dsp:Min>
                  <dsp:Max>1300</dsp:Max>
                  <dsp:RangeMin>1000</dsp:RangeMin>
                  <dsp:RangeMax>2500</dsp:RangeMax>
                  <dsp:RescaleType>Linear</dsp:RescaleType>
                </Combinator>
              </Expression>
              <Expression xsi:type="scr:ExpressionTransform">
                <scr:Expression>Convert.ToInt32(it)</scr:Expression>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="PlaySoundOrFrequency" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="p1:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="p1:CreatePlaySoundOrFrequencyPayload">
                  <p1:PlaySoundOrFrequency>1803</p1:PlaySoundOrFrequency>
                </harp:Payload>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="wie:KeyDown">
                  <wie:Filter>X</wie:Filter>
                  <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
                </Combinator>
              </Expression>
              <Expression xsi:type="p1:CreateMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Payload xsi:type="p1:CreatePlaySoundOrFrequencyPayload">
                  <p1:PlaySoundOrFrequency>31</p1:PlaySoundOrFrequency>
                </harp:Payload>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Expression>
              <Expression xsi:type="MulticastSubject">
                <Name>Sound Commands</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>Sound Messages</Name>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:SubscribeWhen" />
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="3" To="9" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="8" To="9" Label="Source2" />
              <Edge From="9" To="12" Label="Source1" />
              <Edge From="10" To="11" Label="Source1" />
              <Edge From="11" To="12" Label="Source2" />
              <Edge From="12" To="13" Label="Source1" />
              <Edge From="13" To="15" Label="Source1" />
              <Edge From="14" To="15" Label="Source2" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="5" To="9" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="12" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
