<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p2="clr-namespace:Harp.SoundCard;assembly=Harp.SoundCard"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateDiscreteUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>My Distribution</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Reward Port</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Play Tone</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Grating Direction</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>BonVision</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>480</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Black</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Fixed</gl:WindowBorder>
                <gl:WindowState>Fullscreen</gl:WindowState>
                <gl:DisplayDevice>Second</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>DrawScene</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>DrawScene</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Grating Direction</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="TemporalFrequency" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawGratings.bonsai">
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>1</Layer>
              <ExtentX>1</ExtentX>
              <ExtentY>1</ExtentY>
              <SpatialFrequency>10</SpatialFrequency>
              <TemporalFrequency>0</TemporalFrequency>
              <Phase>0</Phase>
              <Angle>0</Angle>
              <SquareWave>false</SquareWave>
              <Contrast>1</Contrast>
              <DutyCycle xsi:nil="true" />
              <Radius>1</Radius>
              <Aperture>0</Aperture>
              <Opacity>1</Opacity>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="GroupWorkflow">
          <Name>Sound</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>Play Tone</Name>
              </Expression>
              <Expression xsi:type="rx:Condition">
                <Name>=1?</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Equal">
                      <Operand xsi:type="IntProperty">
                        <Value>1</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="dsp:FunctionGenerator">
                  <dsp:BufferLength>2205</dsp:BufferLength>
                  <dsp:Frequency>5000</dsp:Frequency>
                  <dsp:Waveform>Sine</dsp:Waveform>
                  <dsp:SampleRate>44100</dsp:SampleRate>
                  <dsp:Amplitude>100000</dsp:Amplitude>
                  <dsp:Offset>0</dsp:Offset>
                  <dsp:Phase>0</dsp:Phase>
                </Combinator>
              </Expression>
              <Expression xsi:type="rx:Condition">
                <Name>=2?</Name>
                <Workflow>
                  <Nodes>
                    <Expression xsi:type="WorkflowInput">
                      <Name>Source1</Name>
                    </Expression>
                    <Expression xsi:type="Equal">
                      <Operand xsi:type="IntProperty">
                        <Value>2</Value>
                      </Operand>
                    </Expression>
                    <Expression xsi:type="WorkflowOutput" />
                  </Nodes>
                  <Edges>
                    <Edge From="0" To="1" Label="Source1" />
                    <Edge From="1" To="2" Label="Source1" />
                  </Edges>
                </Workflow>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="dsp:FunctionGenerator">
                  <dsp:BufferLength>441</dsp:BufferLength>
                  <dsp:Frequency>1000</dsp:Frequency>
                  <dsp:Waveform>Sine</dsp:Waveform>
                  <dsp:SampleRate>44100</dsp:SampleRate>
                  <dsp:Amplitude>100000</dsp:Amplitude>
                  <dsp:Offset>0</dsp:Offset>
                  <dsp:Phase>0</dsp:Phase>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Merge" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="al:AudioPlayback">
                  <al:DeviceName>Generic Software on VE247 (NVIDIA High Definition Audio)</al:DeviceName>
                  <al:SampleRate>44100</al:SampleRate>
                  <al:State>Playing</al:State>
                </Combinator>
              </Expression>
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="0" To="3" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="5" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="5" Label="Source2" />
              <Edge From="5" To="6" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Harp Sound</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>Sound Commands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM3</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Sound Messages</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Play Tone</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>=1?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreatePlaySoundOrFrequencyPayload">
                <p2:PlaySoundOrFrequency>7</p2:PlaySoundOrFrequency>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>=2?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>2</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreatePlaySoundOrFrequencyPayload">
                <p2:PlaySoundOrFrequency>8</p2:PlaySoundOrFrequency>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateAttenuationLeftPayload">
                <p2:AttenuationLeft>0</p2:AttenuationLeft>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Sound Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Sound Messages</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="9" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source2" />
            <Edge From="8" To="9" Label="Source3" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Harp</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>Device Commands</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="beh:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM4</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Device Events</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputClearPayload">
                <beh:OutputClear>DOPort0</beh:OutputClear>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputClearPayload">
                <beh:OutputClear>DOPort1</beh:OutputClear>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Device Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Device Events</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Device Events</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:DigitalInputState" />
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                <Value>DIPort0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToInt32(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Poke Active</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Poke0 Active</Name>
            </Expression>
            <Expression xsi:type="BitwiseAnd">
              <Operand xsi:type="WorkflowProperty" TypeArguments="beh:DigitalInputs">
                <Value>DIPort1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>Convert.ToInt32(it) / 2</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Poke Active</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Poke1 Active</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="11" To="17" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ITI</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Define Reward Stimulus</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>My Distribution</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Reward Port</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Show Stimulus</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Grating Direction</Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                <beh:OutputSet>DOPort0</beh:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Equal">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>-2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Grating Direction</Name>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputSetPayload">
                <beh:OutputSet>DOPort1</beh:OutputSet>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Device Commands</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="9" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Wait Response</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Poke0 Active</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Poke1 Active</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT5S</rx:DueTime>
                <rx:Period>PT0S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source3" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Evaluate Response</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Correct?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Reward Port</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Equal" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>Incorrect</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Reward Port</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Equal" />
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>2</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Play Tone</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>2</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>End Trial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputClearPayload">
                <beh:OutputClear>DOPort0</beh:OutputClear>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="beh:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="beh:CreateOutputClearPayload">
                <beh:OutputClear>DOPort1</beh:OutputClear>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Device Commands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>2</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Grating Direction</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
