<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Device Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="beh:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM51</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Device Events</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>1.1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="beh:FilterRegister">
        <harp:FilterType>Include</harp:FilterType>
        <harp:Register xsi:type="beh:OutputSet" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>1.2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="beh:FilterRegister">
        <harp:FilterType>Include</harp:FilterType>
        <harp:Register xsi:type="beh:OutputClear" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:MessageWriter">
          <harp:FileName>log_selected.bin</harp:FileName>
          <harp:Suffix>None</harp:Suffix>
          <harp:Buffered>true</harp:Buffered>
          <harp:Overwrite>true</harp:Overwrite>
          <harp:FilterType>Include</harp:FilterType>
          <harp:MessageType xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputSetPayload">
          <beh:OutputSet>DO0</beh:OutputSet>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateOutputClearPayload">
          <beh:OutputClear>DO0</beh:OutputClear>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Device Commands</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>4</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Device Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="3" To="7" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="8" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="16" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="20" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
