<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Device Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="beh:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM5</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Device Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:GroupByRegister" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:MessageWriter">
          <harp:FileName>logging_test.bin</harp:FileName>
          <harp:Suffix>None</harp:Suffix>
          <harp:Buffered>true</harp:Buffered>
          <harp:Overwrite>true</harp:Overwrite>
          <harp:FilterType>Include</harp:FilterType>
          <harp:MessageType>Event</harp:MessageType>
        </Combinator>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateEventEnablePayload">
          <beh:EventEnable>PortDI PortDIO AnalogData Camera0 Camera1</beh:EventEnable>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Device Commands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Device Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
