<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Harp Behavior Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="beh:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM51</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateServoMotor2PeriodPayload">
          <beh:ServoMotor2Period>0</beh:ServoMotor2Period>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateEnableServosPayload">
          <beh:EnableServos>ServoOutput2</beh:EnableServos>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>4</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateDisableServosPayload">
          <beh:DisableServos>ServoOutput2</beh:DisableServos>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>5</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1000</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>5.1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Rescale">
          <dsp:Min>0</dsp:Min>
          <dsp:Max>90</dsp:Max>
          <dsp:RangeMin>1000</dsp:RangeMin>
          <dsp:RangeMax>2000</dsp:RangeMax>
          <dsp:RescaleType>Linear</dsp:RescaleType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>5.2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Convert.ToInt32(it)</scr:Expression>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>5.3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="ServoMotor2Pulse" Selector="it" />
        </PropertyMappings>
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>5.4</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateServoMotor2PulsePayload">
          <beh:ServoMotor2Pulse>0</beh:ServoMotor2Pulse>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Harp Behavior Commands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="21" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="21" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="21" Label="Source3" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="18" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="20" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="21" Label="Source4" />
      <Edge From="21" To="22" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
