<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:pump="clr-namespace:Harp.SyringePump;assembly=Harp.SyringePump"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>VariableInitialization</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="pump:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="pump:CreateEnableMotorDriverPayload">
                <pump:EnableMotorDriver>Disabled</pump:EnableMotorDriver>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:IgnoreElements" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>UpdateStep</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>104</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>NumberOfSteps</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>StepNumber</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DeviceCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="pump:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM67</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DeviceEvents</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="pump:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="pump:CreateProtocolDirectionPayload">
          <pump:ProtocolDirection>Forward</pump:ProtocolDirection>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>4</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>NumberOfSteps</Name>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="ProtocolStepCount" Selector="it" />
        </PropertyMappings>
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="pump:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="pump:CreateProtocolStepCountPayload">
          <pump:ProtocolStepCount>104</pump:ProtocolStepCount>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>5</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="pump:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="pump:CreateProtocolPeriodPayload">
          <pump:ProtocolPeriod>10</pump:ProtocolPeriod>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>6</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="pump:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="pump:CreateStepModePayload">
          <pump:StepMode>Quarter</pump:StepMode>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>DeviceCommands</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>7</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DeviceEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>8</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>8.1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="pump:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="pump:CreateEnableMotorDriverPayload">
          <pump:EnableMotorDriver>Enabled</pump:EnableMotorDriver>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DeviceCommands</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>8.2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="pump:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="pump:CreateEnableProtocolPayload">
          <pump:EnableProtocol>Enabled</pump:EnableProtocol>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DeviceCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>8.3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="pump:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="pump:CreateEnableMotorDriverPayload">
          <pump:EnableMotorDriver>Disabled</pump:EnableMotorDriver>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DeviceCommands</Name>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>UpdateStep</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>9</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>UpdateStep</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StepNumber</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionCondition">
        <scr:Expression>it != 5</scr:Expression>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="scr:ExpressionCondition">
        <scr:Expression>it == 5</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>StepNumber</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>10</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StepNumber</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionCondition">
        <scr:Expression>it &gt;= 4</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>103</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionCondition">
        <scr:Expression>it &lt; 4</scr:Expression>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>104</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>NumberOfSteps</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="16" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="16" Label="Source2" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="16" Label="Source3" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source4" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="20" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="24" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="27" Label="Source1" />
      <Edge From="26" To="27" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="31" Label="Source1" />
      <Edge From="30" To="31" Label="Source2" />
      <Edge From="31" To="32" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="34" To="36" Label="Source1" />
      <Edge From="35" To="37" Label="Source1" />
      <Edge From="36" To="37" Label="Source2" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="38" To="41" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="43" Label="Source1" />
      <Edge From="41" To="42" Label="Source1" />
      <Edge From="42" To="43" Label="Source2" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="46" To="49" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="51" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
      <Edge From="50" To="51" Label="Source2" />
      <Edge From="51" To="52" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
