<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:p1="clr-namespace:Harp.SoundCard;assembly=Harp.SoundCard"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Behavior Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="beh:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM4</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Behavior Events</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>5</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreatePwmDutyCycleDO0Payload">
          <beh:PwmDutyCycleDO0>50</beh:PwmDutyCycleDO0>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>6</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreatePwmFrequencyDO0Payload">
          <beh:PwmFrequencyDO0>1</beh:PwmFrequencyDO0>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>7</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreatePwmStartPayload">
          <beh:PwmStart>PwmDO0</beh:PwmStart>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>8</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreatePwmStopPayload">
          <beh:PwmStop>PwmDO0</beh:PwmStop>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Behavior Commands</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>6</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Behavior Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Annotation">
          <Name>2</Name>
          <Text><![CDATA[]]></Text>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
          <rx:Name>SoundCard Commands</rx:Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="p1:Device">
            <harp:OperationMode>Active</harp:OperationMode>
            <harp:OperationLed>On</harp:OperationLed>
            <harp:DumpRegisters>true</harp:DumpRegisters>
            <harp:VisualIndicators>On</harp:VisualIndicators>
            <harp:Heartbeat>Disabled</harp:Heartbeat>
            <harp:IgnoreErrors>false</harp:IgnoreErrors>
            <harp:PortName>COM3</harp:PortName>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="rx:PublishSubject">
          <Name>SoundCard Events</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Annotation">
          <Name>3</Name>
          <Text><![CDATA[]]></Text>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="p1:CreateMessage">
          <harp:MessageType>Write</harp:MessageType>
          <harp:Payload xsi:type="p1:CreateConfigureDI0Payload">
            <p1:ConfigureDI0>StartSound</p1:ConfigureDI0>
          </harp:Payload>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Annotation">
          <Name>4</Name>
          <Text><![CDATA[]]></Text>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="p1:CreateMessage">
          <harp:MessageType>Write</harp:MessageType>
          <harp:Payload xsi:type="p1:CreateSoundIndexDI0Payload">
            <p1:SoundIndexDI0>10</p1:SoundIndexDI0>
          </harp:Payload>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Merge" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MulticastSubject">
          <Name>SoundCard Commands</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Annotation">
          <Name>4</Name>
          <Text><![CDATA[]]></Text>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>SoundCard Events</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:SubscribeWhen" />
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="14" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="14" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="14" Label="Source3" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source4" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="18" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="27" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source2" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="31" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="30" To="31" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
