<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Tone Frequency" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Tone Frequency</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Max Amplitude" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>100000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Max Amplitude</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Steps" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>10</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Number of Steps</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Tone Duration" Description="Tone duration in seconds" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Tone Duration</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Min Amplitude" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>10000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Min Amplitude</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Current Step</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>10000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Current Amplitude</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Max Amplitude</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Min Amplitude</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Number of Steps</Name>
            </Expression>
            <Expression xsi:type="Subtract">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Divide" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Amplitude Increment</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="19" To="21" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="22" To="25" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source2" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Amplitude Increment</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Current Step</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Multiply" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Min Amplitude</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="MulticastSubject">
              <Name>Current Amplitude</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Play Step</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Tone Duration</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT3S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="SubscribeSubject">
              <Name>Current Amplitude</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Amplitude" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:FunctionGenerator">
                <dsp:BufferLength>4410</dsp:BufferLength>
                <dsp:Frequency>1000</dsp:Frequency>
                <dsp:Waveform>Sine</dsp:Waveform>
                <dsp:SampleRate>44100</dsp:SampleRate>
                <dsp:Amplitude>10000</dsp:Amplitude>
                <dsp:Offset>0</dsp:Offset>
                <dsp:Phase>0</dsp:Phase>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioPlayback">
                <al:SampleRate>44100</al:SampleRate>
                <al:State>Playing</al:State>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioCapture">
                <al:DeviceName>Microphone (Realtek(R) Audio)</al:DeviceName>
                <al:SampleRate>44100</al:SampleRate>
                <al:SampleFormat>Mono16</al:SampleFormat>
                <al:BufferLength>100</al:BufferLength>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:DiscreteFourierTransform">
                <dsp:OperationFlags>Scale</dsp:OperationFlags>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Split" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="13" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Finalize Step</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Current Step</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Number of Steps</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Count" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:RepeatCount">
          <rx:Count>10</rx:Count>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="7" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
