<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init Shaders</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Black</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Maximized</gl:WindowState>
                <gl:DisplayDevice>Primary</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:ShaderResources">
                <gl:Shaders />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>MyTriangle</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Triangle.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.NormalizedView.bonsai" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Draw Scene</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Draw Scene</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw Scene</Name>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawImage.bonsai">
              <TextureName>MyTriangle</TextureName>
              <ExtentX>0.1</ExtentX>
              <ExtentY>0.2</ExtentY>
              <LocationX>0</LocationX>
              <LocationY>0</LocationY>
              <Layer>0</Layer>
              <Angle>45</Angle>
              <ScaleX>1</ScaleX>
              <ScaleY>1</ScaleY>
              <ShiftX>0</ShiftX>
              <ShiftY>0</ShiftY>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges />
  </Workflow>
</WorkflowBuilder>
