<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogInput">
          <mx:SignalSource>/Dev1/ao/SampleClock</mx:SignalSource>
          <mx:SampleRate>100000</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>10000</mx:BufferSize>
          <mx:SamplesPerChannel xsi:nil="true" />
          <mx:Channels>
            <mx:AnalogInputChannelConfiguration>
              <mx:ChannelName />
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ai0</mx:PhysicalChannel>
              <mx:TerminalConfiguration>Differential</mx:TerminalConfiguration>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:FunctionGenerator">
          <dsp:BufferLength>10000</dsp:BufferLength>
          <dsp:Frequency>1</dsp:Frequency>
          <dsp:Waveform>Sawtooth</dsp:Waveform>
          <dsp:SampleRate>10000</dsp:SampleRate>
          <dsp:Amplitude>0.7</dsp:Amplitude>
          <dsp:Offset>0</dsp:Offset>
          <dsp:Phase>0</dsp:Phase>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertScale">
          <dsp:Depth>U8</dsp:Depth>
          <dsp:Scale>1</dsp:Scale>
          <dsp:Shift>0</dsp:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertScale">
          <dsp:Depth>F64</dsp:Depth>
          <dsp:Scale>3</dsp:Scale>
          <dsp:Shift>0</dsp:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:AnalogOutput">
          <mx:SignalSource />
          <mx:SampleRate>100000</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1000</mx:BufferSize>
          <mx:Channels>
            <mx:AnalogOutputChannelConfiguration>
              <mx:ChannelName>ao0</mx:ChannelName>
              <mx:MinimumValue>-10</mx:MinimumValue>
              <mx:MaximumValue>10</mx:MaximumValue>
              <mx:PhysicalChannel>Dev1/ao0</mx:PhysicalChannel>
              <mx:VoltageUnits>Volts</mx:VoltageUnits>
            </mx:AnalogOutputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="7" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
