<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:mx="clr-namespace:Bonsai.DAQmx;assembly=Bonsai.DAQmx"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
          <rx:Period>PT0.05S</rx:Period>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="mx:DigitalInput">
          <mx:SignalSource />
          <mx:SampleRate>0</mx:SampleRate>
          <mx:ActiveEdge>Rising</mx:ActiveEdge>
          <mx:SampleMode>ContinuousSamples</mx:SampleMode>
          <mx:BufferSize>1</mx:BufferSize>
          <mx:SamplesPerChannel xsi:nil="true" />
          <mx:Channels>
            <mx:DigitalInputChannelConfiguration>
              <mx:ChannelName />
              <mx:Grouping>OneChannelForEachLine</mx:Grouping>
              <mx:Lines>Dev1/port0/line0</mx:Lines>
            </mx:DigitalInputChannelConfiguration>
            <mx:DigitalInputChannelConfiguration>
              <mx:ChannelName />
              <mx:Grouping>OneChannelForEachLine</mx:Grouping>
              <mx:Lines>Dev1/port0/line1</mx:Lines>
            </mx:DigitalInputChannelConfiguration>
          </mx:Channels>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it[0] </scr:Expression>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it != 0</scr:Expression>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it[1]</scr:Expression>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>4</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Val0</Selector>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>5</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it != 0</scr:Expression>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="3" To="8" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
