<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StopButton</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>1.1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>1.2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartButton</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>1.3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="gui:ButtonBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Font>Microsoft Sans Serif, 18pt</gui:Font>
        <gui:Text> Start</gui:Text>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>StartButton</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="Annotation">
        <Name>2.3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="gui:ButtonBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Font>Microsoft Sans Serif, 18pt</gui:Font>
        <gui:Text>Stop</gui:Text>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>StopButton</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="gui:TableLayoutPanelBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:ColumnCount>1</gui:ColumnCount>
        <gui:RowCount>1</gui:RowCount>
        <gui:ColumnStyles />
        <gui:RowStyles />
        <gui:CellSpans />
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="Annotation">
        <Name>2.4</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="gui:TableLayoutPanelBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:ColumnCount>1</gui:ColumnCount>
        <gui:RowCount>1</gui:RowCount>
        <gui:ColumnStyles />
        <gui:RowStyles />
        <gui:CellSpans />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="4" Label="Source2" />
      <Edge From="3" To="4" Label="Source3" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="9" Label="Source1" />
      <Edge From="7" To="9" Label="Source2" />
      <Edge From="8" To="9" Label="Source3" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="26" Label="Source1" />
      <Edge From="12" To="21" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="21" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source3" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="26" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source3" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
