<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:al="clr-namespace:Bonsai.Audio;assembly=Bonsai.Audio"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>1</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Current Trial</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="io:CsvReader">
        <io:FileName>tone_data.csv</io:FileName>
        <io:ScanPattern />
        <io:SkipRows>0</io:SkipRows>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:ToArray" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Length</Selector>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Subtract">
        <Operand xsi:type="IntProperty">
          <Value>1</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.4</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Number of Trials</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Current Trial</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3.4</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Read Trial Parameters</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SkipRows" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="io:CsvReader">
              <io:FileName>tone_data.csv</io:FileName>
              <io:ScanPattern>%d,%d,%d</io:ScanPattern>
              <io:SkipRows>1</io:SkipRows>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3.4</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3.5</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Frequency" Selector="Item2" />
          <Property Name="Duration" Selector="Item3" />
        </PropertyMappings>
        <Selector>it</Selector>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3.6</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Play Trial Tone</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Frequency" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:FunctionGenerator">
                <dsp:BufferLength>441</dsp:BufferLength>
                <dsp:Frequency>4000</dsp:Frequency>
                <dsp:Waveform>Sine</dsp:Waveform>
                <dsp:SampleRate>44100</dsp:SampleRate>
                <dsp:Amplitude>10000</dsp:Amplitude>
                <dsp:Offset>0</dsp:Offset>
                <dsp:Phase>0</dsp:Phase>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="al:AudioPlayback">
                <al:SampleRate>44100</al:SampleRate>
                <al:State>Playing</al:State>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Duration" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>4000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromMilliseconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT4S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="7" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3.7</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Increment Trial Counter</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Current Trial</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Current Trial</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3.8</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3.9</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Number of Trials</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Count" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:RepeatCount">
          <rx:Count>3</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3.10</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Number of Trials</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="16" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="18" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="20" Label="Source1" />
      <Edge From="19" To="20" Label="Source2" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="24" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="26" Label="Source1" />
      <Edge From="25" To="26" Label="Source2" />
      <Edge From="26" To="30" Label="Source1" />
      <Edge From="27" To="30" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source3" />
      <Edge From="30" To="33" Label="Source1" />
      <Edge From="31" To="33" Label="Source2" />
      <Edge From="32" To="33" Label="Source3" />
      <Edge From="33" To="34" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
