<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialize</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Width" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>80</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Image Width</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Height" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>60</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Image Height</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>1</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Random Distribution</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Image Width</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Create Black Line</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="X" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:CreatePoint2d">
                      <cv:X>80</cv:X>
                      <cv:Y>1</cv:Y>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Size" Selector="X,Y" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:ScalarBuffer">
                      <dsp:Size>
                        <dsp:Width>80</dsp:Width>
                        <dsp:Height>1</dsp:Height>
                      </dsp:Size>
                      <dsp:Depth>F64</dsp:Depth>
                      <dsp:Channels>1</dsp:Channels>
                      <dsp:Value>
                        <dsp:Val0>0</dsp:Val0>
                        <dsp:Val1>0</dsp:Val1>
                        <dsp:Val2>0</dsp:Val2>
                        <dsp:Val3>0</dsp:Val3>
                      </dsp:Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ConvertToImage" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Black Line</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Temporary Image</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Image Width</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Image Height</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Cropping Rectangle</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="18" Label="Source1" />
            <Edge From="15" To="18" Label="Source2" />
            <Edge From="16" To="18" Label="Source3" />
            <Edge From="17" To="18" Label="Source4" />
            <Edge From="18" To="19" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Init Image</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Black Line</Name>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Temporary Image</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Line Generator</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Image Height</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Range">
                <rx:Start>0</rx:Start>
                <rx:Count>60</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Generate New Line</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Image Width</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Range">
                <rx:Start>0</rx:Start>
                <rx:Count>80</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Random Distribution</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Image Width</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Buffer">
                <dsp:Count>80</dsp:Count>
                <dsp:Skip xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:ConvertToImage" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="9" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.4</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Append Line</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Temporary Image</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Concat">
                <dsp:Axis>0</dsp:Axis>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Temporary Image</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2-5</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>All Lines Done?</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ElementIndex" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Index</Selector>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Image Height</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Mod">
              <Operand xsi:type="IntProperty">
                <Value>60</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.6</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Remove Black Line</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Cropping Rectangle</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="RegionOfInterest" Selector="Item1,Item2,Item3,Item4" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:Crop">
                <cv:RegionOfInterest>
                  <cv:X>0</cv:X>
                  <cv:Y>0</cv:Y>
                  <cv:Width>80</cv:Width>
                  <cv:Height>60</cv:Height>
                </cv:RegionOfInterest>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.7</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Final Image</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="7" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
