<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>hexbug.avi</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>100</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertScale">
          <dsp:Depth>F32</dsp:Depth>
          <dsp:Scale>100</dsp:Scale>
          <dsp:Shift>0</dsp:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>4</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>5</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="Annotation">
        <Name>6</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Abs" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>7</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Average" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="4" To="8" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="8" Label="Source2" />
      <Edge From="7" To="8" Label="Source3" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
