<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>1fly.avi</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>false</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>\\.\pipe\video</cv:Path>
          <cv:Suffix>None</cv:Suffix>
          <cv:Overwrite>true</cv:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:StartProcess">
          <io:FileName>C:\Users\hgmar\Downloads\ffmpeg-master-latest-win64-gpl-shared\bin\ffmpeg.exe</io:FileName>
          <io:Arguments>-y -f rawvideo -vcodec rawvideo  -s 862x878 -r 60 -pix_fmt gray -i \\.\pipe\video -c:v libx264 -b:v 5212K -maxrate 5212K -bufsize 5M "myvideo.mp4"</io:Arguments>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
