<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>hexbug.avi</cv:FileName>
          <cv:PlaybackRate>60</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>true</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Bgr2Hsv</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>126</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>16</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>4</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>5</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>6</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>7</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid</Selector>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>8</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Y</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="7" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="11" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="15" Label="Source2" />
      <Edge From="14" To="16" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
