<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:drw="clr-namespace:Bonsai.Vision.Drawing;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1 </Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateContinuousUniform">
          <p1:Lower>0</p1:Lower>
          <p1:Upper>639</p1:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Random Distribution</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Get Random Point</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Sample Point</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Random Distribution</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:SampleArray">
                      <p1:Count>2</p1:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="X" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Index">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Y" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:CreatePoint2f">
                <cv:X>275.218</cv:X>
                <cv:Y>322.35083</cv:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="6" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source3" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Circle Position</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>4</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>5</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Size</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Size" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:CreateCanvas">
          <drw:Size>
            <drw:Width>640</drw:Width>
            <drw:Height>480</drw:Height>
          </drw:Size>
          <drw:Depth>U8</drw:Depth>
          <drw:Channels>3</drw:Channels>
          <drw:Color>
            <drw:Val0>0</drw:Val0>
            <drw:Val1>0</drw:Val1>
            <drw:Val2>0</drw:Val2>
            <drw:Val3>0</drw:Val3>
          </drw:Color>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>6</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Image" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:AddImage">
          <drw:Destination>
            <drw:X>0</drw:X>
            <drw:Y>0</drw:Y>
            <drw:Width>0</drw:Width>
            <drw:Height>0</drw:Height>
          </drw:Destination>
          <drw:Interpolation>Linear</drw:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>7</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Circle Position</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Center" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:Circle">
          <drw:Center>
            <drw:X>207</drw:X>
            <drw:Y>286</drw:Y>
          </drw:Center>
          <drw:Radius>10</drw:Radius>
          <drw:Color>
            <drw:Val0>0</drw:Val0>
            <drw:Val1>0</drw:Val1>
            <drw:Val2>255</drw:Val2>
            <drw:Val3>255</drw:Val3>
          </drw:Color>
          <drw:Thickness>3</drw:Thickness>
          <drw:LineType>Connected8</drw:LineType>
          <drw:Shift>0</drw:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>8</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:DrawCanvas" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="17" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="17" To="21" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="21" To="25" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="27" Label="Source1" />
      <Edge From="26" To="27" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
