<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>Initialize</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Output Path" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Output Path</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Current Trial" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Current Trial</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Number of Trials" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>3</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Number of Trials</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Lower" DisplayName="ITI Min" />
              <Property Name="Upper" DisplayName="ITI Max" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:CreateContinuousUniform">
                <p1:Lower>0</p1:Lower>
                <p1:Upper>3</p1:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ITI Distribution</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value />
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Filename1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value />
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Status</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="File Prefix" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>MySession</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>File Prefix</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Number of Trials</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Current Trial</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Subtract" />
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Trials Left</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>ITI</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="20" To="22" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>true</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Start Session</Name>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Init Trial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>Generate Filename1</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Output Path</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>\</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>File Prefix</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>_Trial_</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Current Trial</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>Convert.ToString(it)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="StringProperty">
                      <Value>.txt</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>Filename1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="7" Label="Source1" />
                  <Edge From="1" To="7" Label="Source2" />
                  <Edge From="2" To="7" Label="Source3" />
                  <Edge From="3" To="7" Label="Source4" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="7" Label="Source5" />
                  <Edge From="6" To="7" Label="Source6" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ITI Distribution</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:Sample" />
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>TimeSpan.FromSeconds(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>ITI</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="DueTime" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT2.571S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Init Trial</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Status</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="1" To="7" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Run Trial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Run Trial</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Status</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Finish Trial</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Current Trial</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Current Trial</Name>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Finish Trial</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Status</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Trials Left</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Count" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:RepeatCount">
          <rx:Count>3</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Start Session</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Status</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Current Trial</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ITI</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Filename1</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="11" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
