<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>DeviceCommands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="beh:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COMx</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DeviceEvents</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>1.1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:GroupByRegister" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="harp:MessageWriter">
          <harp:FileName>device.bin</harp:FileName>
          <harp:Suffix>None</harp:Suffix>
          <harp:Buffered>true</harp:Buffered>
          <harp:Overwrite>false</harp:Overwrite>
          <harp:FilterType>Include</harp:FilterType>
          <harp:MessageType xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="beh:GetDeviceMetadata" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:WriteAllText">
          <io:Path>device.yml</io:Path>
          <io:Overwrite>false</io:Overwrite>
          <io:Append>false</io:Append>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
