<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Annotation">
          <Name>1</Name>
          <Text><![CDATA[]]></Text>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:CameraCapture">
            <cv:Index>1</cv:Index>
            <cv:CaptureProperties />
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:Resize">
            <cv:Size>
              <cv:Width>640</cv:Width>
              <cv:Height>480</cv:Height>
            </cv:Size>
            <cv:Interpolation>Linear</cv:Interpolation>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="cv:ImageWriter">
            <cv:Path>\\.\pipe\video</cv:Path>
            <cv:Suffix>None</cv:Suffix>
            <cv:Overwrite>true</cv:Overwrite>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Annotation">
          <Name>2</Name>
          <Text><![CDATA[]]></Text>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="io:StartProcess">
            <io:FileName>C:\Users\HugoMarques\Documents\Applications\ffmpeg-win64-gpl-shared\bin\ffmpeg.exe</io:FileName>
            <io:Arguments>-y -f rawvideo -vcodec rawvideo  -s 640x480 -r 30 -pix_fmt bgr24 -i \\.\pipe\video -c:v libx264 -b:v 5212K -maxrate 5212K -bufsize 5M "myvideo.mp4"</io:Arguments>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Last" />
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="WorkflowOutput" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>1</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Resize">
          <cv:Size>
            <cv:Width>640</cv:Width>
            <cv:Height>480</cv:Height>
          </cv:Size>
          <cv:Interpolation>Linear</cv:Interpolation>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ImageWriter">
          <cv:Path>\\.\pipe\video</cv:Path>
          <cv:Suffix>None</cv:Suffix>
          <cv:Overwrite>true</cv:Overwrite>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="io:StartProcess">
          <io:FileName>C:\Users\HugoMarques\Documents\Applications\ffmpeg-win64-gpl-shared\bin\ffmpeg.exe</io:FileName>
          <io:Arguments>-y -f rawvideo -s 640x480 -r 30 -pix_fmt bgr24 -i \\.\pipe\video -c:v libx264 "myvideo.mp4"</io:Arguments>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Last" />
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
