<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:bz="clr-namespace:BonZeb;assembly=BonZeb"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>hexbug.mp4</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>true</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>137</cv:X>
            <cv:Y>50</cv:Y>
            <cv:Width>394</cv:Width>
            <cv:Height>346</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertScale">
          <dsp:Depth>F32</dsp:Depth>
          <dsp:Scale>1</dsp:Scale>
          <dsp:Shift>0</dsp:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Abs" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>57</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertScale">
          <dsp:Depth>F32</dsp:Depth>
          <dsp:Scale>1</dsp:Scale>
          <dsp:Shift>0</dsp:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>100</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="bz:CalculateBackground">
          <bz:PixelSearch>Darkest</bz:PixelSearch>
          <bz:NoiseThreshold>0</bz:NoiseThreshold>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:ConvertScale">
          <dsp:Depth>F32</dsp:Depth>
          <dsp:Scale>1</dsp:Scale>
          <dsp:Shift>0</dsp:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="dsp:Abs" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>26</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BackgroundSubtraction">
          <cv:BackgroundFrames>5</cv:BackgroundFrames>
          <cv:AdaptationRate>0.1</cv:AdaptationRate>
          <cv:ThresholdValue>28</cv:ThresholdValue>
          <cv:ThresholdType>Binary</cv:ThresholdType>
          <cv:SubtractionMethod>Dark</cv:SubtractionMethod>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="13" To="15" Label="Source1" />
      <Edge From="14" To="18" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
