<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FileCapture">
          <cv:FileName>hexbug.mp4</cv:FileName>
          <cv:PlaybackRate>0</cv:PlaybackRate>
          <cv:StartPosition>0</cv:StartPosition>
          <cv:PositionUnits>Frames</cv:PositionUnits>
          <cv:Loop>true</cv:Loop>
          <cv:Playing>true</cv:Playing>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>137</cv:X>
            <cv:Y>50</cv:Y>
            <cv:Width>394</cv:Width>
            <cv:Height>346</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:RangeThreshold">
          <cv:Lower>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>115.22222222222223</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>171.88888888888889</cv:Val0>
            <cv:Val1>137.88888888888889</cv:Val1>
            <cv:Val2>166.22222222222223</cv:Val2>
            <cv:Val3>255</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Bgr2Hsv</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>142</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>9</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Grayscale" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Threshold">
          <cv:ThresholdValue>128</cv:ThresholdValue>
          <cv:MaxValue>255</cv:MaxValue>
          <cv:ThresholdType>BinaryInv</cv:ThresholdType>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
