<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>0</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>3D Scene</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Annotation">
              <Name>3</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Draw</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:BindTexture">
                <gl:TextureSlot>Texture0</gl:TextureSlot>
                <gl:ShaderName>TexturedModel</gl:ShaderName>
                <gl:TextureName>FrontWall</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
              <TranslationX>0</TranslationX>
              <TranslationY>0</TranslationY>
              <TranslationZ>-25</TranslationZ>
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
              <ScaleX>50</ScaleX>
              <ScaleY>10</ScaleY>
              <ScaleZ>50</ScaleZ>
              <Ambient>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Ambient>
              <Diffuse>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Diffuse>
              <Specular>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <MeshName>Plane</MeshName>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:BindTexture">
                <gl:TextureSlot>Texture0</gl:TextureSlot>
                <gl:ShaderName>TexturedModel</gl:ShaderName>
                <gl:TextureName>BackWall</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
              <TranslationX>0</TranslationX>
              <TranslationY>0</TranslationY>
              <TranslationZ>25</TranslationZ>
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>0</RotationX>
              <ScaleX>50</ScaleX>
              <ScaleY>10</ScaleY>
              <ScaleZ>50</ScaleZ>
              <Ambient>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Ambient>
              <Diffuse>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Diffuse>
              <Specular>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <MeshName>Plane</MeshName>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:BindTexture">
                <gl:TextureSlot>Texture0</gl:TextureSlot>
                <gl:ShaderName>TexturedModel</gl:ShaderName>
                <gl:TextureName>RightWall</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
              <TranslationX>25</TranslationX>
              <TranslationY>0</TranslationY>
              <TranslationZ>0</TranslationZ>
              <RotationZ>0</RotationZ>
              <RotationY>90</RotationY>
              <RotationX>0</RotationX>
              <ScaleX>50</ScaleX>
              <ScaleY>10</ScaleY>
              <ScaleZ>50</ScaleZ>
              <Ambient>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Ambient>
              <Diffuse>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Diffuse>
              <Specular>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <MeshName>Plane</MeshName>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:BindTexture">
                <gl:TextureSlot>Texture0</gl:TextureSlot>
                <gl:ShaderName>TexturedModel</gl:ShaderName>
                <gl:TextureName>LeftWall</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
              <TranslationX>-25</TranslationX>
              <TranslationY>0</TranslationY>
              <TranslationZ>0</TranslationZ>
              <RotationZ>0</RotationZ>
              <RotationY>90</RotationY>
              <RotationX>0</RotationX>
              <ScaleX>50</ScaleX>
              <ScaleY>10</ScaleY>
              <ScaleZ>50</ScaleZ>
              <Ambient>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Ambient>
              <Diffuse>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Diffuse>
              <Specular>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <MeshName>Plane</MeshName>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:BindTexture">
                <gl:TextureSlot>Texture0</gl:TextureSlot>
                <gl:ShaderName>TexturedModel</gl:ShaderName>
                <gl:TextureName>Floor</gl:TextureName>
                <gl:TextureTarget>Texture2D</gl:TextureTarget>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.DrawTexturedModel.bonsai">
              <TranslationX>0</TranslationX>
              <TranslationY>-5</TranslationY>
              <TranslationZ>0</TranslationZ>
              <RotationZ>0</RotationZ>
              <RotationY>0</RotationY>
              <RotationX>90</RotationX>
              <ScaleX>50</ScaleX>
              <ScaleY>50</ScaleY>
              <ScaleZ>50</ScaleZ>
              <Ambient>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Ambient>
              <Diffuse>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Diffuse>
              <Specular>
                <X>0.8</X>
                <Y>0.8</Y>
                <Z>0.8</Z>
              </Specular>
              <SpecularExponent>10</SpecularExponent>
              <MeshName>Plane</MeshName>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="1" To="4" Label="Source1" />
            <Edge From="1" To="6" Label="Source1" />
            <Edge From="1" To="8" Label="Source1" />
            <Edge From="1" To="10" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init Shaders</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>320</gl:Width>
                <gl:Height>240</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Gray</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location>
                  <gl:X>0</gl:X>
                  <gl:Y>0</gl:Y>
                </gl:Location>
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>First</gl:DisplayDevice>
                <gl:TargetRenderFrequency>60</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState />
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="BonVision:Primitives.BonVisionResources.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:TextureResources">
                <gl:Textures>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>BackWall</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Arena\calibration_back.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>Floor</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Arena\calibration_floor.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>FrontWall</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Arena\calibration_front.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>LeftWall</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Arena\calibration_left.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                  <gl:TextureConfiguration xsi:type="gl:ImageTexture">
                    <gl:Name>RightWall</gl:Name>
                    <gl:Width xsi:nil="true" />
                    <gl:Height xsi:nil="true" />
                    <gl:InternalFormat>Rgba</gl:InternalFormat>
                    <gl:WrapS>Repeat</gl:WrapS>
                    <gl:WrapT>Repeat</gl:WrapT>
                    <gl:MinFilter>Linear</gl:MinFilter>
                    <gl:MagFilter>Linear</gl:MagFilter>
                    <gl:FileName>Arena\calibration_right.png</gl:FileName>
                    <gl:ColorType>Unchanged</gl:ColorType>
                    <gl:FlipMode>Vertical</gl:FlipMode>
                  </gl:TextureConfiguration>
                </gl:Textures>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateVector3">
          <gl:X>1</gl:X>
          <gl:Y>-0</gl:Y>
          <gl:Z>0</gl:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>CameraPosition</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CameraPosition</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Eye" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.CubemapView.bonsai">
        <Eye>
          <X>-21</X>
          <Y>-0</Y>
          <Z>4</Z>
        </Eye>
        <NearClip>0.1</NearClip>
        <FarClip>1000</FarClip>
        <Light>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Light>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Draw</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderCubemap">
          <gl:RenderState />
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:FaceSize xsi:nil="true" />
          <gl:InternalFormat>Rgb</gl:InternalFormat>
          <gl:MinFilter>Linear</gl:MinFilter>
          <gl:MagFilter>Linear</gl:MagFilter>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="BonVision:Environment.ViewWindow.bonsai">
        <Width>20</Width>
        <Height>15</Height>
        <Rotation>
          <X>0</X>
          <Y>0</Y>
          <Z>0</Z>
        </Rotation>
        <Translation>
          <X>0</X>
          <Y>0</Y>
          <Z>-10</Z>
        </Translation>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>W</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateVector3">
          <gl:X>0</gl:X>
          <gl:Y>-0</gl:Y>
          <gl:Z>-1</gl:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateVector3">
          <gl:X>0</gl:X>
          <gl:Y>-0</gl:Y>
          <gl:Z>1</gl:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>D</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateVector3">
          <gl:X>1</gl:X>
          <gl:Y>-0</gl:Y>
          <gl:Z>0</gl:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateVector3">
          <gl:X>-1</gl:X>
          <gl:Y>-0</gl:Y>
          <gl:Z>0</gl:Z>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="rx:Accumulate" />
      <Expression xsi:type="MulticastSubject">
        <Name>CameraPosition</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="11" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="24" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="24" Label="Source2" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="24" Label="Source3" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source4" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>
