<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:viz="clr-namespace:Bonsai.Design.Visualizers;assembly=Bonsai.Design.Visualizers"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StartButton</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>StopButton</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="StringProperty">
            <Value> </Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="Text" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="gui:ButtonBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Font>Microsoft Sans Serif, 18pt</gui:Font>
        <gui:Text> Start</gui:Text>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>StartButton</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="SubscribeSubject">
        <Name>Frames</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="gui:ButtonBuilder">
        <gui:Enabled>true</gui:Enabled>
        <gui:Visible>true</gui:Visible>
        <gui:Font>Microsoft Sans Serif, 18pt</gui:Font>
        <gui:Text>Stop</gui:Text>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>StopButton</Name>
      </Expression>
      <Expression xsi:type="VisualizerMapping" />
      <Expression xsi:type="viz:TableLayoutPanelBuilder">
        <viz:ColumnCount>2</viz:ColumnCount>
        <viz:RowCount>2</viz:RowCount>
        <viz:ColumnStyles />
        <viz:RowStyles />
        <viz:CellSpans />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="18" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="18" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source3" />
    </Edges>
  </Workflow>
</WorkflowBuilder>