<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:drw="clr-namespace:Bonsai.Vision.Drawing;assembly=Bonsai.Vision"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateContinuousUniform">
          <p1:Lower>0</p1:Lower>
          <p1:Upper>300</p1:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>Random Distribution</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:CreateCanvas">
          <drw:Size>
            <drw:Width>300</drw:Width>
            <drw:Height>300</drw:Height>
          </drw:Size>
          <drw:Depth>U8</drw:Depth>
          <drw:Channels>3</drw:Channels>
          <drw:Color>
            <drw:Val0>0</drw:Val0>
            <drw:Val1>0</drw:Val1>
            <drw:Val2>0</drw:Val2>
            <drw:Val3>0</drw:Val3>
          </drw:Color>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Current Canvas</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>Create Point Array</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Range">
                <rx:Start>0</rx:Start>
                <rx:Count>10</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Random Distribution</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:Sample" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="X" Selector="Item2.Item1" />
                      <Property Name="Y" Selector="Item2.Item2" />
                    </PropertyMappings>
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="cv:CreatePoint2f">
                      <cv:X>247.231018</cv:X>
                      <cv:Y>32.31131</cv:Y>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="3" Label="Source1" />
                  <Edge From="2" To="4" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>10</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Point Array</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Point Array</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3,1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Current Canvas</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3.2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3.3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Center" Selector="Item1" />
        </PropertyMappings>
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3.4</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:Circle">
          <drw:Center>
            <drw:X>247</drw:X>
            <drw:Y>32</drw:Y>
          </drw:Center>
          <drw:Radius>15</drw:Radius>
          <drw:Color>
            <drw:Val0>201.66549733917486</drw:Val0>
            <drw:Val1>40.906608868812491</drw:Val1>
            <drw:Val2>266.073738115874</drw:Val2>
            <drw:Val3>219.61590052564438</drw:Val3>
          </drw:Color>
          <drw:Thickness>1</drw:Thickness>
          <drw:LineType>Connected8</drw:LineType>
          <drw:Shift>0</drw:Shift>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3.5</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Current Canvas</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3.6</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:DrawCanvas" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3.7</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Point Array</Name>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Length</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Count" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>10</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3.8</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="13" Label="Source1" />
      <Edge From="12" To="13" Label="Source2" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="16" Label="Source2" />
      <Edge From="15" To="16" Label="Source3" />
      <Edge From="16" To="18" Label="Source1" />
      <Edge From="17" To="18" Label="Source2" />
      <Edge From="18" To="20" Label="Source1" />
      <Edge From="19" To="20" Label="Source3" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="24" Label="Source1" />
      <Edge From="23" To="24" Label="Source2" />
      <Edge From="24" To="29" Label="Source1" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source2" />
      <Edge From="29" To="31" Label="Source1" />
      <Edge From="30" To="31" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>