<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Dsp.Design;assembly=Bonsai.Dsp.Design"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns:gui="clr-namespace:Bonsai.Gui;assembly=Bonsai.Gui"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p2="clr-namespace:Harp.FlyPAD;assembly=Harp.FlyPAD"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>SubjectInitialization</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timestamp" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Timestamp</Selector>
            </Expression>
            <Expression xsi:type="Format">
              <Format>../output/{0:yyMMdd}_{0:HHmmss}/</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>OutputPath</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>GUI</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Capacitance</Name>
            </Expression>
            <Expression xsi:type="VisualizerMapping">
              <VisualizerType xsi:type="TypeMapping" TypeArguments="p1:MatVisualizer" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>Time Elapsed: </Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0S</rx:DueTime>
                <rx:Period>PT1S</rx:Period>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>FromSecondsToTimeSpan</scr:Name>
              <scr:Expression>TimeSpan.FromSeconds(it).ToString()</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Text" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="gui:LabelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:Text>Time Elapsed: 00:01:13</gui:Text>
            </Expression>
            <Expression xsi:type="VisualizerMapping" />
            <Expression xsi:type="gui:TableLayoutPanelBuilder">
              <gui:Enabled>true</gui:Enabled>
              <gui:Visible>true</gui:Visible>
              <gui:ColumnCount>1</gui:ColumnCount>
              <gui:RowCount>2</gui:RowCount>
              <gui:ColumnStyles />
              <gui:RowStyles>
                <gui:RowStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Height>97</gui:Height>
                </gui:RowStyle>
                <gui:RowStyle>
                  <gui:SizeType>Percent</gui:SizeType>
                  <gui:Height>3</gui:Height>
                </gui:RowStyle>
              </gui:RowStyles>
              <gui:CellSpans />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="10" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="PortName" />
        <Property Name="FileName" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>FlyPAD</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>Commands</rx:Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM3</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Messages</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OutputPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Messages</Name>
            </Expression>
            <Expression xsi:type="p2:Parse">
              <harp:Register xsi:type="p2:CapacitanceValues" />
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="RightShift">
                    <Value>4</Value>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:ConvertFromArray">
                <dsp:Size>
                  <dsp:Width>1</dsp:Width>
                  <dsp:Height>64</dsp:Height>
                </dsp:Size>
                <dsp:Depth xsi:nil="true" />
                <dsp:Channels>1</dsp:Channels>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Capacitance</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OutputPath</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="FileName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>FlyPAD.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:MatrixWriter">
                <dsp:Path>../output/260828_112244/FlyPAD.bin</dsp:Path>
                <dsp:Suffix>Timestamp</dsp:Suffix>
                <dsp:Overwrite>false</dsp:Overwrite>
                <dsp:Layout>ColumnMajor</dsp:Layout>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OutputPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="p2:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p2:CreateEnableAcquisitionPayload">
                <p2:EnableAcquisition>Enabled</p2:EnableAcquisition>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Messages</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>Messages</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:GroupByRegister" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OutputPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>/harp/FlyPAD.bin</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:MessageWriter">
                <harp:FileName>../output/260828_112244//harp/FlyPAD.bin</harp:FileName>
                <harp:Suffix>None</harp:Suffix>
                <harp:Buffered>true</harp:Buffered>
                <harp:Overwrite>false</harp:Overwrite>
                <harp:FilterType>Include</harp:FilterType>
                <harp:MessageType xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OutputPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:GetDeviceMetadata" />
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OutputPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>/harp/device.yml</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Add" />
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Path" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="io:WriteAllText">
                <io:Path>../output/260828_112244//harp/device.yml</io:Path>
                <io:Overwrite>false</io:Overwrite>
                <io:Append>false</io:Append>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OutputPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="17" Label="Source1" />
            <Edge From="11" To="14" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="19" Label="Source1" />
            <Edge From="18" To="19" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="23" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="31" Label="Source1" />
            <Edge From="26" To="28" Label="Source1" />
            <Edge From="27" To="28" Label="Source2" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source2" />
            <Edge From="31" To="33" Label="Source1" />
            <Edge From="32" To="33" Label="Source2" />
            <Edge From="34" To="40" Label="Source1" />
            <Edge From="35" To="37" Label="Source1" />
            <Edge From="36" To="37" Label="Source2" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="39" Label="Source1" />
            <Edge From="39" To="40" Label="Source2" />
            <Edge From="40" To="42" Label="Source1" />
            <Edge From="41" To="42" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1H5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p2:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p2:CreateEnableAcquisitionPayload">
          <p2:EnableAcquisition>Disabled</p2:EnableAcquisition>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>