<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.SoundCard;assembly=Harp.SoundCard"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p2="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>DeviceCommands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM5</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>DeviceMessages</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>B</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>UniformWhiteNoise</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>1</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:CreateRandom">
                <num:Seed xsi:nil="true" />
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CreateContinuousUniform">
                <p2:Lower>-1</p2:Lower>
                <p2:Upper>1</p2:Upper>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Count" DisplayName="SamplesPerChannel" />
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>2</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:SampleArray">
                <p2:Count>96000</p2:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="4" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="6" To="8" Label="Source2" />
            <Edge From="7" To="8" Label="Source3" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>C</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>PureTone</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Count" DisplayName="SamplesPerChannel" />
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>1</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Range">
                <rx:Start>0</rx:Start>
                <rx:Count>9600</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it * 2 * 3.14</scr:Expression>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Frequency (Hz)" />
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>5000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="SamplingFrequency" />
            </Expression>
            <Expression xsi:type="Divide">
              <Operand xsi:type="DoubleProperty">
                <Value>96000</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>2</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Sin" />
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>3</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="9" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="11" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>4</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>ConvertToByteArray</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>1</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>2</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>ConvertToInt32</scr:Name>
              <scr:Expression>Convert.ToInt32(it * 2147483647)</scr:Expression>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>3</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="rx:CreateObservable">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="Annotation">
                    <Name>1</Name>
                    <Text><![CDATA[]]></Text>
                  </Expression>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="RightShift">
                    <Value>24</Value>
                  </Expression>
                  <Expression xsi:type="BitwiseAnd">
                    <Operand xsi:type="IntProperty">
                      <Value>255</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Value" Selector="it" />
                    </PropertyMappings>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>180</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="RightShift">
                    <Value>16</Value>
                  </Expression>
                  <Expression xsi:type="BitwiseAnd">
                    <Operand xsi:type="IntProperty">
                      <Value>255</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Value" Selector="it" />
                    </PropertyMappings>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>62</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="RightShift">
                    <Value>8</Value>
                  </Expression>
                  <Expression xsi:type="BitwiseAnd">
                    <Operand xsi:type="IntProperty">
                      <Value>255</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Value" Selector="it" />
                    </PropertyMappings>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>73</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="RightShift">
                    <Value>0</Value>
                  </Expression>
                  <Expression xsi:type="BitwiseAnd">
                    <Operand xsi:type="IntProperty">
                      <Value>255</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="Value" Selector="it" />
                    </PropertyMappings>
                    <Selector>it</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>129</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>8</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="1" To="6" Label="Source1" />
                  <Edge From="1" To="10" Label="Source1" />
                  <Edge From="1" To="14" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="3" To="18" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="18" Label="Source2" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="7" To="18" Label="Source3" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="18" Label="Source4" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="11" To="18" Label="Source5" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="18" Label="Source6" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="15" To="18" Label="Source7" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source8" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>4</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Name>ConvertToByte</scr:Name>
              <scr:Expression>Convert.ToByte(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="Annotation">
              <Name>5</Name>
              <Text><![CDATA[]]></Text>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="6" To="8" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="12" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>5</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:UpdateSoundWaveform">
          <p1:DeviceIndex xsi:nil="true" />
          <p1:SoundIndex>2</p1:SoundIndex>
          <p1:SampleRate>SampleRate96000Hz</p1:SampleRate>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>6</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreatePlaySoundOrFrequencyPayload">
          <p1:PlaySoundOrFrequency>2</p1:PlaySoundOrFrequency>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>7</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateAttenuationLeftPayload">
          <p1:AttenuationLeft>400</p1:AttenuationLeft>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateAttenuationRightPayload">
          <p1:AttenuationRight>400</p1:AttenuationRight>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>DeviceCommands</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>8</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>DeviceMessages</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="10" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="12" Label="Source1" />
      <Edge From="11" To="12" Label="Source2" />
      <Edge From="12" To="14" Label="Source1" />
      <Edge From="13" To="14" Label="Source2" />
      <Edge From="15" To="16" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="21" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="18" To="20" Label="Source1" />
      <Edge From="19" To="21" Label="Source2" />
      <Edge From="20" To="21" Label="Source3" />
      <Edge From="21" To="22" Label="Source1" />
      <Edge From="22" To="25" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>