<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.5"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>A</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WindowTrigger">
          <rx:Count>100</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>4</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>SaveVideos</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="FileName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="cv:VideoWriter">
                <cv:FileName>MyVideo.avi</cv:FileName>
                <cv:Suffix>FileCount</cv:Suffix>
                <cv:Buffered>true</cv:Buffered>
                <cv:Overwrite>false</cv:Overwrite>
                <cv:FourCC>FMP4</cv:FourCC>
                <cv:FrameRate>30</cv:FrameRate>
                <cv:FrameSize>
                  <cv:Width>0</cv:Width>
                  <cv:Height>0</cv:Height>
                </cv:FrameSize>
                <cv:ResizeInterpolation>NearestNeighbor</cv:ResizeInterpolation>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="5" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source2" />
      <Edge From="4" To="5" Label="Source3" />
      <Edge From="5" To="7" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>