<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Harp Behavior Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="beh:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM51</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>1.1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="beh:Parse">
        <harp:Register xsi:type="beh:AnalogData" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>1.2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Encoder</Selector>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateEncoderResetPayload">
          <beh:EncoderReset>EncoderPort2</beh:EncoderReset>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="beh:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="beh:CreateEnableEncodersPayload">
          <beh:EnableEncoders>EncoderPort2</beh:EnableEncoders>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Merge" />
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Harp Behavior Commands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="11" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source2" />
      <Edge From="11" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>