<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:wie="clr-namespace:Bonsai.Windows.Input;assembly=Bonsai.Windows.Input"
                 xmlns:drw="clr-namespace:Bonsai.Vision.Drawing;assembly=Bonsai.Vision"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="wie:KeyDown">
          <wie:Filter>S</wie:Filter>
          <wie:SuppressRepetitions>false</wie:SuppressRepetitions>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>1.1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:CreateCanvas">
          <drw:Size>
            <drw:Width>100</drw:Width>
            <drw:Height>100</drw:Height>
          </drw:Size>
          <drw:Depth>U8</drw:Depth>
          <drw:Channels>1</drw:Channels>
          <drw:Color>
            <drw:Val0>0</drw:Val0>
            <drw:Val1>0</drw:Val1>
            <drw:Val2>0</drw:Val2>
            <drw:Val3>0</drw:Val3>
          </drw:Color>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>1.2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Add Three Circles</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="drw:Circle">
                <drw:Center>
                  <drw:X>50</drw:X>
                  <drw:Y>50</drw:Y>
                </drw:Center>
                <drw:Radius>40</drw:Radius>
                <drw:Color>
                  <drw:Val0>255</drw:Val0>
                  <drw:Val1>255</drw:Val1>
                  <drw:Val2>255</drw:Val2>
                  <drw:Val3>255</drw:Val3>
                </drw:Color>
                <drw:Thickness>0</drw:Thickness>
                <drw:LineType>Connected8</drw:LineType>
                <drw:Shift>0</drw:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="drw:Circle">
                <drw:Center>
                  <drw:X>50</drw:X>
                  <drw:Y>50</drw:Y>
                </drw:Center>
                <drw:Radius>20</drw:Radius>
                <drw:Color>
                  <drw:Val0>255</drw:Val0>
                  <drw:Val1>255</drw:Val1>
                  <drw:Val2>255</drw:Val2>
                  <drw:Val3>255</drw:Val3>
                </drw:Color>
                <drw:Thickness>0</drw:Thickness>
                <drw:LineType>Connected8</drw:LineType>
                <drw:Shift>0</drw:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="drw:Circle">
                <drw:Center>
                  <drw:X>50</drw:X>
                  <drw:Y>50</drw:Y>
                </drw:Center>
                <drw:Radius>10</drw:Radius>
                <drw:Color>
                  <drw:Val0>255</drw:Val0>
                  <drw:Val1>255</drw:Val1>
                  <drw:Val2>255</drw:Val2>
                  <drw:Val3>255</drw:Val3>
                </drw:Color>
                <drw:Thickness>0</drw:Thickness>
                <drw:LineType>Connected8</drw:LineType>
                <drw:Shift>0</drw:Shift>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>1.3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="drw:DrawCanvas" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>1.4</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject">
        <Name>My Image</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>My Image</Name>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>20</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>50</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>40</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.4</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>40</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.5</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.6</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.7</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="RegionOfInterest" Selector="Item2.Item1,Item2.Item2,Item2.Item3,Item2.Item4" />
        </PropertyMappings>
        <Selector>Item1</Selector>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2.9</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:Crop">
          <cv:RegionOfInterest>
            <cv:X>20</cv:X>
            <cv:Y>50</cv:Y>
            <cv:Width>40</cv:Width>
            <cv:Height>40</cv:Height>
          </cv:RegionOfInterest>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="3" Label="Source1" />
      <Edge From="2" To="3" Label="Source2" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="7" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="23" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="21" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="21" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="21" Label="Source3" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="21" Label="Source4" />
      <Edge From="20" To="21" Label="Source5" />
      <Edge From="21" To="23" Label="Source2" />
      <Edge From="22" To="23" Label="Source3" />
      <Edge From="23" To="25" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="27" Label="Source1" />
      <Edge From="26" To="27" Label="Source2" />
    </Edges>
  </Workflow>
</WorkflowBuilder>