<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:CameraCapture">
          <cv:Index>0</cv:Index>
          <cv:CaptureProperties />
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>1</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:ConvertColor">
          <cv:Conversion>Bgr2Hsv</cv:Conversion>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>2</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:HsvThreshold">
          <cv:Lower>
            <cv:Val0>0</cv:Val0>
            <cv:Val1>0</cv:Val1>
            <cv:Val2>0</cv:Val2>
            <cv:Val3>0</cv:Val3>
          </cv:Lower>
          <cv:Upper>
            <cv:Val0>179</cv:Val0>
            <cv:Val1>255</cv:Val1>
            <cv:Val2>255</cv:Val2>
            <cv:Val3>255</cv:Val3>
          </cv:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>3</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:FindContours">
          <cv:Mode>External</cv:Mode>
          <cv:Method>ChainApproxNone</cv:Method>
          <cv:Offset>
            <cv:X>0</cv:X>
            <cv:Y>0</cv:Y>
          </cv:Offset>
          <cv:MinArea xsi:nil="true" />
          <cv:MaxArea xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>4</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:BinaryRegionAnalysis" />
      </Expression>
      <Expression xsi:type="Annotation">
        <Name>5</Name>
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="cv:LargestBinaryRegion" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid.X</Selector>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Centroid.Y</Selector>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="2" Label="Source1" />
      <Edge From="1" To="2" Label="Source2" />
      <Edge From="2" To="4" Label="Source1" />
      <Edge From="3" To="4" Label="Source2" />
      <Edge From="4" To="6" Label="Source1" />
      <Edge From="5" To="6" Label="Source2" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="10" To="12" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>